PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'stimulus size': '8.5', 'start spatial freq': '0.8', 'end spatial freq': '25.6', 'stimulus duration': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = iva
  eyetracker = MouseGaze
  keyboardBackend = ioHub
  mgBlink = ('MIDDLE_BUTTON',)
  mgMove = CONTINUOUS
  mgSaccade = 0.5
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Routines
  Routine grating_acuity
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
      text [set every frame] = $etRecord.pos
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    VariableComponent pos_list
      startExpValue = {'right':(16,0), 'left':(-16,0), 'top-right':(16,7), 'top-left':(-16, 7), 'bottom-right':(16,-7), 'bottom-left':(-16, -7)}
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    VariableComponent position
      startExpValue = (0, 0)
      startRoutineValue = (randchoice([-1, 1])*16, randchoice([-1, 1])*7)
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    GratingComponent GA
      pos [set every repeat] = position
      saveStartStop = False
      sf [set every repeat] = level if level>float(expInfo['start spatial freq']) else float(expInfo['start spatial freq'])
      size = (float(expInfo['stimulus size']), float(expInfo['stimulus size']))
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
      tex = sqr
      texture resolution = 512
      units = deg
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    ApertureComponent aperture
      disabled = True
      pos [set every repeat] = position
      shape = circle
      size = float(expInfo['stimulus size'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
      units = deg
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    VariableComponent spatial_freq
      startExpValue = float(expInfo['start spatial freq'])
      startRoutineValue = level
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    KeyboardComponent key_resp
      allowedKeys = 'q','w','a','s'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
      storeCorrect = True
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    CodeComponent set_answer
      Code Type = Auto->JS
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      Begin Routine:
        if position == pos_list['top-right']: correctAns='w'
        if position == pos_list['top-left']: correctAns='q'
        if position == pos_list['bottom-right']: correctAns='s'
        if position == pos_list['bottom-left']: correctAns='a'
    EyetrackerRecordComponent etRecord
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
      syncScreenRefresh = False
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  Routine central_fixation
    TextComponent placeholder
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Central fixation
        Place Holder
Flow
  LoopInitiator GA_loop loopType="StairHandler"
    N down = 2
    N up = 1
    loopType = staircase
    max value = float(expInfo['end spatial freq'])
    min value = float(expInfo['start spatial freq'])
    nReps = 12
    start value = float(expInfo['start spatial freq'])
    step sizes = [-0.8,-0.8,-0.4,-0.4,-0.2]
    step type = lin
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    Routine grating_acuity
    Routine central_fixation
  LoopTerminator GA_loop
