PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'stimulus size': '8.5', 'start spatial freq': '0.8', 'step spatial freq': '1', 'end spatial freq': '25.6'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = iva
  keyboardBackend = ioHub
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Routines
  Routine grating_acuity
    VariableComponent pos_list
      disabled = True
      startExpValue = {'right':(16,0), 'left':(-16,0), 'top-right':(16,7), 'top-left':(-16, 7), 'bottom-right':(16,-7), 'bottom-left':(-16, -7)}
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    VariableComponent position
      startExpValue = (0, 0)
      startRoutineValue = (randchoice([-1, 1])*16, 0)
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    GratingComponent GA
      pos [set every repeat] = position
      saveStartStop = False
      sf [set every repeat] = spatial_freq
      size = (float(expInfo['stimulus size']), float(expInfo['stimulus size']))
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      tex = sqr
      texture resolution = 512
      units = deg
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    ApertureComponent aperture
      pos [set every repeat] = position
      shape = circle
      size = float(expInfo['stimulus size'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      units = deg
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    VariableComponent spatial_freq
      startExpValue = float(expInfo['start spatial freq'])
      startRoutineValue = spatial_freq+float(expInfo['step spatial freq'])
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  Routine central_fixation
    TextComponent placeholder
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Central fixation
        Place Holder
Flow
  LoopInitiator GA_loop loopType="StairHandler"
    N down = 2
    N up = 4
    isTrials = False
    loopType = staircase
    max value = float(expInfo['end spatial freq'])
    min value = 0.4
    nReps = 4
    start value = float(expInfo['start spatial freq'])
    step sizes = [0.8,0.8,0.4,0.4,0.2]
    step type = log
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    Routine grating_acuity
    Routine central_fixation
  LoopTerminator GA_loop
