PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'stimulus size': '8.5', 'start spatial freq': '0.8', 'step spatial freq': '1', 'end spatial freq': '25.6', 'stimulus duration': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = iva
  keyboardBackend = ioHub
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Routines
  Routine grating_acuity
    VariableComponent pos_list
      disabled = True
      startExpValue = {'right':(16,0), 'left':(-16,0), 'top-right':(16,7), 'top-left':(-16, 7), 'bottom-right':(16,-7), 'bottom-left':(-16, -7)}
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    VariableComponent position
      startExpValue = (0, 0)
      startRoutineValue = (randchoice([-1, 1])*16, randchoice([-1, 1])*7)
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    GratingComponent GA
      mask = gauss
      pos [set every repeat] = position
      saveStartStop = False
      sf [set every repeat] = spatial_freq
      size = (float(expInfo['stimulus size']), float(expInfo['stimulus size']))
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
      tex = sqr
      texture resolution = 512
      units = deg
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    ApertureComponent aperture
      pos [set every repeat] = position
      shape = circle
      size = float(expInfo['stimulus size'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo["stimulus duration"])
      units = deg
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  Routine central_fixation
    TextComponent placeholder
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Central fixation
        Place Holder
  Routine set_values
    VariableComponent spatial_freq
      startExpValue = float(expInfo['start spatial freq'])-float(expInfo['step spatial freq'])
      startRoutineValue = spatial_freq+float(expInfo['step spatial freq'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
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    CodeComponent gaussian_SD
      Code Type = Auto->JS
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      Begin Routine:
        GA.maskParams = {'sd': 2}
Flow
  LoopInitiator GA_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = (float(expInfo['end spatial freq'])-float(expInfo['start spatial freq']))//float(expInfo['step spatial freq'])
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    Routine set_values
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 4
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      Routine grating_acuity
      Routine central_fixation
    LoopTerminator trials
  LoopTerminator GA_loop
